CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:33
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_xy(?P<Site>[0-9])_ch(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D:Yes
    x:0.065
    y:0.065
    z:0.29
    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "0")
    Name to assign these images:memb
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['We rescale the intensity, which normalizes the data. Variation in intensity due to variation in sample prep and image acquisition will be minimized and the pipeline performance will be more consistent. ']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
    Input:DNA
    Output:RescaleIntensityDNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Input:memb
    Output:RescaleIntensityMemb
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Input:mito
    Output:RescaleIntensityMito
    Rescaling method:Stretch each image to use the full intensity range
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
Resize:[module_num:8|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notes:['Downsampling the image will increase the processing speed. This is a good option when the objects of interest are large enough, like the nuclei in this monolayer, and retain their shape shrunken.']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
    Input:RescaleIntensityDNA
    Output:ResizeDNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

GaussianFilter:[module_num:9|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notes:['The signal is low. There is a lot of noise in the regions around the nuclei. A gaussian filter will reduce the noise and increase the separation between the foreground and background. The sigma chosen is small relative to the nuclei. This is a balance between removeing noise and preserving the boundary between images.']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
    Input:ResizeDNA
    Output:GuassianFilter
    Sigma:2

ApplyThreshold:[module_num:10|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
    Input:GuassianFilter
    Output:ApplyThreshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
Remove holes:[module_num:11|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
    Input:ApplyThreshold
    Output:RemoveHoles
    Size:100

Watershed:[module_num:12|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
    Input:RemoveHoles
    Object:Watershed
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:8

Resize:[module_num:13|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
    Input:ApplyThreshold
    Output:ResizeAT
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:2
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

Erosion:[module_num:14|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
    Input:ResizeAT
    Output:Erosion
    Structuring element:ball,4

ResizeObjects:[module_num:15|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
    Input:Watershed
    Object:Nuclei
    Method:Factor
    Factor:2
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
ExpandOrShrinkObjects:[module_num:16|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
    Select the input objects:Nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes
    Retain the outlines of the identified objects?:No
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
ImageMath:[module_num:17|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:RescaleIntensityDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:RescaleIntensityMemb
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:RescaleIntensityMito
    Multiply the third image by:1.0
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
Closing:[module_num:18|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
    Input:ImageAfterMath
    Output:Closing
    Structuring element:disk,20

ApplyThreshold:[module_num:19|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
    Input:Closing
    Output:ApplyThresholdMemb
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
ImageMath:[module_num:20|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertMemb
    Image or measurement?:Image
    Select the first image:RescaleIntensityMemb
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ApplyThreshold:[module_num:21|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
    Input:InvertMemb
    Output:ApplyThresholdMemb2
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
Watershed:[module_num:22|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
    Input:ApplyThresholdMemb2
    Object:Cells
    Generate from:Distance
    Markers:Erosion
    Mask:ApplyThresholdMemb
    Connectivity:8

Save:[module_num:23|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
    Directory:Default Output Folder|
    Image:ImageAfterMath
    Color depth:16

ConvertObjectsToImage:[module_num:24|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
    Select the input objects:Cells
    Name the output image:CellImage
    Select the color format:Color
    Select the colormap:Default

Save:[module_num:25|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
    Directory:Default Output Folder|
    Image:CellImage
    Color depth:16

OverlayOutlines:[module_num:26|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:NucleiOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Nuclei

Save:[module_num:27|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
    Directory:Default Output Folder|
    Image:NucleiOverlay
    Color depth:16

MeasureObjectIntensity:[module_num:28|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
    Hidden:1
    Select an image to measure:DNA
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:29|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

FilterObjects:[module_num:30|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notes:['A minimum value of 20000 was chosen based upon a histogram of the unfiltered data for Nuclei Area created by this pipeline.']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
    Input:Nuclei
    Object:FilteredNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:20000
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:31|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:FilteredNucleiOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:FilteredNuclei

Save:[module_num:32|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
    Directory:Default Output Folder|
    Image:FilteredNucleiOverlay
    Color depth:16

ExportToSpreadsheet:[module_num:33|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:3d_monolayer_
    Overwrite existing files without warning?:Yes
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