CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_xy(?P<Site>[0-9])_ch(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:.+_xy(?P<Site>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D:Yes
    x:0.065
    y:0.065
    z:0.29
    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "0")
    Name to assign these images:memb
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cell_labels")
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    Name to assign these objects:Cell
    Select the image type:Objects
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    Retain outlines of loaded objects?:No
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    Select the rule criteria:and (file does contain "nuclei_labels")
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    Name to assign these objects:Nuclei
    Select the image type:Objects
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    Retain outlines of loaded objects?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Site

RescaleIntensity:[module_num:5|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notes:['We rescale the intensity, which normalizes the data. Variation in intensity due to variation in sample prep and image acquisition will be minimized and the pipeline performance will be more consistent. Also, when visuals are created the intensity will fill a larger fraction of the dynamic range.']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
    Input:DNA
    Output:RescaleIntensityDNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Input:memb
    Output:RescaleIntensityMemb
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Input:mito
    Output:RescaleIntensityMito
    Rescaling method:Stretch each image to use the full intensity range
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
MeasureObjectIntensity:[module_num:8|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enabled:False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
    Hidden:1
    Select an image to measure:DNA
    Select objects to measure:Nuclei
    Select objects to measure:Cells

MeasureObjectSizeShape:[module_num:9|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enabled:False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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:10|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:3d_monolayer_
    Overwrite existing files without warning?:Yes
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityDNA
    Name the output image:NucleiOutlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Nuclei

OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityMemb
    Name the output image:CellOutlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Cell

Save:[module_num:13|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
    Directory:Default Output Folder sub-folder|outlines
    Image:NucleiOutlines
    Color depth:16

Save:[module_num:14|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
    Directory:Default Output Folder sub-folder|outlines
    Image:CellOutlines
    Color depth:16

OverlayObjects:[module_num:15|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
    Input:RescaleIntensityDNA
    Output:NucleiOverlay
    Objects:Nuclei
    Opacity:0.15

OverlayObjects:[module_num:16|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
    Input:RescaleIntensityMemb
    Output:NucleiMembOverlay
    Objects:Nuclei
    Opacity:0.15

OverlayObjects:[module_num:17|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
    Input:RescaleIntensityMemb
    Output:CellOverlay
    Objects:Cell
    Opacity:0.15

Save:[module_num:18|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
    Directory:Default Output Folder sub-folder|overlays
    Image:NucleiOverlay
    Color depth:16

Save:[module_num:19|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
    Directory:Default Output Folder sub-folder|overlays
    Image:CellOverlay
    Color depth:16

Save:[module_num:20|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
    Directory:Default Output Folder sub-folder|overlays
    Image:NucleiMembOverlay
    Color depth:16

CropObjects:[module_num:21|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
    Objects:Nuclei
    Directory:Default Output Folder sub-folder|object_crops
