CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_xy(?P<Site>[0-9])_ch(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D:Yes
    x:0.065
    y:0.065
    z:0.29
    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "0")
    Name to assign these images:memb
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['We rescale the intensity, which normalizes the data. Variation in intensity due to variation in sample prep and image acquisition will be minimized and the pipeline performance will be more consistent. Also, when visuals are created the intensity will fill a larger fraction of the dynamic range.']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
    Input:DNA
    Output:RescaleIntensityDNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Input:memb
    Output:RescaleIntensityMemb
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Input:mito
    Output:RescaleIntensityMito
    Rescaling method:Stretch each image to use the full intensity range
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
Resize:[module_num:8|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notes:['Downsampling the image will increase the processing speed. This is a good option when the objects of interest are large enough, like the nuclei in this monolayer, and retain their shape shrunken.']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
    Input:RescaleIntensityDNA
    Output:ResizeDNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

MedianFilter:[module_num:9|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
    Input:ResizeDNA
    Output:MedianFilter
    Window:5

ApplyThreshold:[module_num:10|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
    Input:MedianFilter
    Output:ApplyThreshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
Remove holes:[module_num:11|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
    Input:ApplyThreshold
    Output:RemoveHoles
    Size:100

Watershed:[module_num:12|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
    Input:RemoveHoles
    Object:Watershed
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:8

ResizeObjects:[module_num:13|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
    Input:Watershed
    Object:Nuclei
    Method:Factor
    Factor:2
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
ConvertObjectsToImage:[module_num:14|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
    Select the input objects:Nuclei
    Name the output image:NucleiImage
    Select the color format:uint16
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
Erosion:[module_num:15|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
    Input:NucleiImage
    Output:Erosion
    Structuring element:disk,5

AdaptiveLocalNormalization:[module_num:16|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
    Input:RescaleIntensityMemb
    Output:AdaptiveLocalNormalization
    Standard Deviation Threshold:1.0
    Maximum Radius:50
    Minimum Radius:5
    Radius Step Size:5

ApplyThreshold:[module_num:17|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
    Input:AdaptiveLocalNormalization
    Output:AlnThreshold
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ImageMath:[module_num:18|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MembInvert
    Image or measurement?:Image
    Select the first image:AlnThreshold
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Remove holes:[module_num:19|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
    Input:MembInvert
    Output:MembInvertRemoveHoles
    Size:200

Seeding:[module_num:20|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
    Input:Erosion
    Output:Seeding

Watershed:[module_num:21|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
    Input:MembInvertRemoveHoles
    Object:Cells
    Generate from:Markers
    Markers:Seeding
    Mask:MembInvertRemoveHoles
    Connectivity:8

ConvertObjectsToImage:[module_num:22|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
    Select the input objects:Cells
    Name the output image:CellsWithSeed
    Select the color format:uint16
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
SeedingRemove:[module_num:23|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
    Input:CellsWithSeed
    Output:CellImage

Save:[module_num:24|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
    Directory:Default Output Folder sub-folder|labels
    Image:CellImage
    Color depth:16

Save:[module_num:25|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
    Directory:Default Output Folder sub-folder|labels
    Image:NucleiImage
    Color depth:16
