CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_xy(?P<Site>[0-9])_ch(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D:Yes
    x:0.065
    y:0.065
    z:0.29
    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "0")
    Name to assign these images:memb
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['We rescale the intensity, which normalizes the data. Variation in intensity due to variation in sample prep and image acquisition will be minimized and the pipeline performance will be more consistent. ']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
    Input:DNA
    Output:RescaleIntensityDNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Input:memb
    Output:RescaleIntensityMemb
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Input:mito
    Output:RescaleIntensityMito
    Rescaling method:Stretch each image to use the full intensity range
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
Resize:[module_num:8|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notes:['Downsampling the image will increase the processing speed. This is a good option when the objects of interest are large enough, like the nuclei in this monolayer, and retain their shape shrunken.']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
    Input:RescaleIntensityDNA
    Output:ResizeDNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

MedianFilter:[module_num:9|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
    Input:ResizeDNA
    Output:MedianFilter
    Window:5

ApplyThreshold:[module_num:10|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
    Input:MedianFilter
    Output:ApplyThreshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
Remove holes:[module_num:11|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
    Input:ApplyThreshold
    Output:RemoveHoles
    Size:100

Watershed:[module_num:12|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
    Input:RemoveHoles
    Object:Watershed
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:8

ResizeObjects:[module_num:13|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
    Input:Watershed
    Object:Nuclei
    Method:Factor
    Factor:2
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
MeasureObjectIntensity:[module_num:14|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
    Hidden:1
    Select an image to measure:DNA
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:15|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:3d_monolayer_
    Overwrite existing files without warning?:Yes
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
FilterObjects:[module_num:17|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notes:['A minimum value of 20000 was chosen based upon a histogram of the unfiltered data for Nuclei Area created by this pipeline.']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
    Input:Nuclei
    Object:FilteredNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:20000
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityDNA
    Name the output image:FilteredNucleiOutlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:FilteredNuclei

Save:[module_num:19|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
    Directory:Default Output Folder sub-folder|outlines
    Image:FilteredNucleiOutlines
    Color depth:16

OverlayObjects:[module_num:20|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
    Input:RescaleIntensityDNA
    Output:NucleiOverlay
    Objects:FilteredNuclei
    Opacity:0.2

Save:[module_num:21|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
    Directory:Default Output Folder sub-folder|overlays
    Image:NucleiOverlay
    Color depth:16

CropObjects:[module_num:22|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
    Objects:FilteredNuclei
    Directory:Default Output Folder sub-folder|object_crops

ConvertObjectsToImage:[module_num:23|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
    Select the input objects:FilteredNuclei
    Name the output image:NucleiLabels
    Select the color format:uint16
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
Save:[module_num:24|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
    Directory:Default Output Folder sub-folder|labels
    Image:NucleiLabels
    Color depth:16
