CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:313
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_finalnuclei")
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    Name to assign these objects:ground_truth
    Select the image type:Objects
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    Select the rule criteria:and (file doesnot contain "_finalnuclei")
    Name to assign these images:fluorescence
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:fluorescence
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectOverlap:[module_num:6|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
    Select the objects to be used as the ground truth basis for calculating the amount of overlap:ground_truth
    Select the objects to be tested for overlap against the ground truth:nuclei
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No
