CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'Drag and drop your IMAGES (you can drag and drop the entire "images_Illum-corrected" folder) into the panel just below this one.', '', '<-Drag and drop your "segmentation_start.cppipe" files into the left panel.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['FOR THIS TUTORIAL, YOU CAN SKIP THIS MODULE, AS IT IS ALREADY CONFIGURED.', '', 'The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', '']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"ChannelNumber": "integer", "Date": "text", "FileLocation": "text", "Frame": "text", "Series": "text", "Site": "integer", "Well": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Plate>.*)_(?P<Well>[A-P]{1}[0-9]{2})_site(?P<Site>[0-9])_Ch(?P<ChannelNumber>[1-5]).
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['FOR THIS TUTORIAL, YOU CAN SKIP THIS MODULE, AS IT IS ALREADY CONFIGURED.', '', 'The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.']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
    Assign a name to:Images matching rules
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    Match metadata:[{'OrigER': 'Well', 'OrigMito': 'Well', 'OrigDNA': 'Well', 'OrigRNA': 'Well', 'OrigActin_Golgi_Membrane': 'Well'}, {'OrigER': 'Site', 'OrigMito': 'Site', 'OrigDNA': 'Site', 'OrigRNA': 'Site', 'OrigActin_Golgi_Membrane': 'Site'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch2")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch3")
    Name to assign these images:OrigRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch4")
    Name to assign these images:OrigActin_Golgi_Membrane
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch5")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['FOR THIS TUTORIAL, YOU CAN SKIP THIS MODULE, AS IT IS NOT USED.', '', 'The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.']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
    Do you want to group your images?:No
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
RunCellpose:[module_num:5|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
    Select the input image:OrigDNA
    Rescale images before running Cellpose:No
    Run CellPose in docker or local python environment:Docker
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:0.1
    Expected object diameter:30
    Detection mode:nuclei
    Name the output object:RunCellpose
    Use GPU:No
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:15
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes
    Rescale probability map?:No

IdentifyPrimaryObjects:[module_num:6|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notes:['This module is used to create a group of objects called Nuclei by segmenting the nuclear regions from the OrigDNA image.', 'The settings used here should be good enough for the images used in this tutorial but they depend highly on the image set!', '', 'We encourage you to play around with the settings in order to get a "good enough" segmentation of your own data.', 'REMEMBER: we aim for "good enough" because there is no settings that will give you a PERFECT segmentation every time in every image.']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
    Select the input image:OrigDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.002,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RescaleIntensity:[module_num:7|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notes:['Sometimes, the intensity of the image pixels are very dim compared to the bright segmentation outlines that we are going overlay on the next module.', "By rescaling the image, we are modifying the pixel values so that they cover the entire range of intensities and the image doesn't look too dim compared with the outlines.", 'This is for visualization purposes ONLY. You should not make measurements on the rescaled image!']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
    Select the input image:OrigDNA
    Name the output image:OrigDNA_RESCALED
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:8|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notes:['This module produces a visualization of our segmentations so far by overlaying the RunCellpose and Nuclei objects outlines onto the OrigDNA image.', 'This is useful both as a sanity check and as a means of showing the results of your analysis to others!', '', 'The output of this module is called NucleiCheck.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigDNA_RESCALED
    Name the output image:NucleiCheck
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei
    Select outline color:#21FFFF
    Select objects to display:RunCellpose

SaveImages:[module_num:9|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notes:['This module saves the NucleiCheck images for future reference. It does so in a sub-folder of the default output folder called "overlay-images".', 'Tha name of the saved file is constructed using the name of the corresponding OrigDNA image as a prefix and adding a "_nuclear_overlay" suffix. ']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
    Select the type of image to save:Image
    Select the image to save:NucleiCheck
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigER
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclear_overlay
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|overlay_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
