CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (extension does isimage) (file does contain ".npy")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:4
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain ".npy")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Plate>[0-9]{5})
    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain ".npy")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_Illum
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain ".npy")
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    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Elsewhere...|/Users/pryder/Documents/tutorials/AdvancedSegmentation
    Match file and image metadata:[{'Image Metadata': u'Plate', 'CSV Metadata': u'Image_Metadata_PlateID'}, {'Image Metadata': u'Well', 'CSV Metadata': u'Image_Metadata_CPD_WELL_POSITION'}]
    Use case insensitive matching?:No
    Metadata file name:20585_AE.csv
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'IllumPh_golgi': 'Plate', 'IllumMito': 'Plate', 'OrigPh_golgi': 'Plate', 'IllumER': 'Plate', 'OrigHoechst': 'Plate', 'OrigER': 'Plate', 'IllumSyto': 'Plate', 'OrigSyto': 'Plate', 'OrigMito': 'Plate', 'IllumHoechst': 'Plate'}, {'IllumPh_golgi': None, 'IllumMito': None, 'OrigPh_golgi': 'Well', 'IllumER': None, 'OrigHoechst': 'Well', 'OrigER': 'Well', 'IllumSyto': None, 'OrigSyto': 'Well', 'OrigMito': 'Well', 'IllumHoechst': None}, {'IllumPh_golgi': None, 'IllumMito': None, 'OrigPh_golgi': 'Site', 'IllumER': None, 'OrigHoechst': 'Site', 'OrigER': 'Site', 'IllumSyto': None, 'OrigSyto': 'Site',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
    Image set matching method:Metadata
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:OrigHoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:OrigSyto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:OrigPh_golgi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "IllumMito")
    Name to assign these images:IllumMito
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumPh_golgi")
    Name to assign these images:IllumPh_golgi
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumSyto")
    Name to assign these images:IllumSyto
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumER")
    Name to assign these images:IllumER
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumHoechst")
    Name to assign these images:IllumHoechst
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:OrigHoechst
    Name the output image:Hoechst
    Select the illumination function:IllumHoechst
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigPh_golgi
    Name the output image:Ph_golgi
    Select the illumination function:IllumPh_golgi
    Select how the illumination function is applied:Divide
    Select the input image:OrigSyto
    Name the output image:Syto
    Select the illumination function:IllumSyto
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:.9
    Lower and upper bounds on threshold:0.002,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Ph_golgi
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    Regularization factor:0.005
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.003,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:Syto
    Name the output image:FilteredRNA
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:10|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
    Select the input image:FilteredRNA
    Name the output image:SytoNuclei
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:SytoNuclei
    Name the primary objects to be identified:Nucleoli
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Syto
    Name the output image:SanityCheck
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei
    Select outline color:Green
    Select objects to display:Nucleoli

MeasureColocalization:[module_num:13|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
    Select images to measure:Mito, Syto, Ph_golgi, Hoechst, ER
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, Cytoplasm, Nuclei, Nucleoli
    Run all metrics?:Accurate
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:Yes
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:Yes
    Method for Costes thresholding:Fast

MeasureObjectIntensity:[module_num:14|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
    Select images to measure:ER, Mito, Hoechst, Ph_golgi, Syto
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureObjectIntensityDistribution:[module_num:15|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
    Select images to measure:Mito, Syto, Hoechst, OrigSyto, ER
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:Cells, Cytoplasm, Nuclei, Nucleoli
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectNeighbors:[module_num:17|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:18|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:19|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
    Select objects to measure:Nucleoli
    Select neighboring objects to measure:Nucleoli
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
RelateObjects:[module_num:20|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
    Parent objects:Nuclei
    Child objects:Nucleoli
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:NucleoliChildObjects
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
ExportToSpreadsheet:[module_num:21|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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