CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:4
HasImagePlaneDetails:False

Images:[module_num:1|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['WELCOME TO THE BEGGINNER SEGMENTATION TUTORIAL!! :D', '', 'To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', 'Drag and drop your IMAGES (you can drag and drop the entire "images_Illum-corrected" folder) into the panel just below this one.', '', '<-Drag and drop your "segmentation_start.cppipe" files into the left panel.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    :
    Filter images?:Images only
    Select the rule criteria:or (extension does isimage) (file does contain ".npy")

Metadata:[module_num:2|svn_version:'Unknown'|variable_revision_number:6|show_window:False|notes:['FOR THIS TUTORIAL, YOU CAN SKIP THIS MODULE, AS IT IS ALREADY CONFIGURED.', '', 'The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', '']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"ChannelNumber": "integer", "Date": "text", "FileLocation": "text", "Frame": "text", "Series": "text", "Site": "integer", "Well": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Plate>.*)_(?P<Well>[A-P]{1}[0-9]{2})_site(?P<Site>[0-9])_Ch(?P<ChannelNumber>[1-5]).tif
    Regular expression to extract from folder name:(?P<Date>[0-9]{4}_[0-9]{2}_[0-9]{2})$
    Extract metadata from:All images
    Select the filtering criteria:and (file doesnot contain "")
    Metadata file location:Elsewhere...|
    Match file and image metadata:[]
    Use case insensitive matching?:No
    Metadata file name:
    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|svn_version:'Unknown'|variable_revision_number:8|show_window:False|notes:['FOR THIS TUTORIAL, YOU CAN SKIP THIS MODULE, AS IT IS ALREADY CONFIGURED.', '', 'The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Assign a name to:Images matching rules
    Select the image type:Grayscale image
    Name to assign these images:DNA
    Match metadata:[{'OrigER': 'Well', 'OrigMito': 'Well', 'OrigDNA': 'Well', 'OrigRNA': 'Well', 'OrigActin_Golgi_Membrane': 'Well'}, {'OrigER': 'Site', 'OrigMito': 'Site', 'OrigDNA': 'Site', 'OrigRNA': 'Site', 'OrigActin_Golgi_Membrane': 'Site'}]
    Image set matching method:Metadata
    Set intensity range from:Image metadata
    Assignments count:5
    Single images count:0
    Maximum intensity:255.0
    Process as 3D?:No
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:OrigDNA
    Name to assign these objects:Cell
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (file does contain "Ch2")
    Name to assign these images:OrigER
    Name to assign these objects:Cell
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (file does contain "Ch3")
    Name to assign these images:OrigRNA
    Name to assign these objects:Cell
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (file does contain "Ch4")
    Name to assign these images:OrigActin_Golgi_Membrane
    Name to assign these objects:Cell
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (file does contain "Ch5")
    Name to assign these images:OrigMito
    Name to assign these objects:Cell
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0

Groups:[module_num:4|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['FOR THIS TUTORIAL, YOU CAN SKIP THIS MODULE, AS IT IS NOT USED.', '', 'The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Do you want to group your images?:No
    grouping metadata count:1
    Metadata category:None
