CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:313
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['The input for this module should be the red/blue (and optionally green) layer of outlines exported from GIMP (without the raw image present - this is crucial to not get funky results! It would be nice if CP read .xcf files directly but it does not).']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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file does contain "_outlines.png")

Metadata:[module_num:2|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notes:['We don’t need metadata for the pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<BaseName>.*)\.png
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*\\(?P<folder_name>.+)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Here we load the outline images and name them “Annotation”.']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Annotation
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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notes:['We do not need grouping for this pipeline.']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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Split the annotation image (which has red outlines around nuclei and blue pixels in background regions, and optionally green commentary) into separate colors.']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
    Select the input image:Annotation
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OriginalNucleusBoundaries
    Convert green to gray?:No
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    Convert blue to gray?:Yes
    Name the output image:BlueBackgroundPixels
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
ImageMath:[module_num:6|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedOutlines
    Image or measurement?:Image
    Select the first image:OriginalNucleusBoundaries
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ConvertImageToObjects:[module_num:7|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notes:['Turn the red outlines into objects that include:', '1) actual nuclei, including tiny micronuclei that might only have a single pixel at their center.', '2) single-pixel regions between nuclei that ought to be ignored. We will filter these out in the FilterObjects module.', '3) large background regions that ought to be ignored. We will filter these out later too. The majority were hopefully filtered out using the blue background pixels, but sometimes people forget. ']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
    Select the input image:InvertedOutlines
    Name the output object:PotentialNuclei
    Convert to boolean image:1
    Preserve original labels:No
    Background label:0
    Connectivity:1

MeasureObjectIntensity:[module_num:8|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notes:['Measure the blue (background marker) inside each potential nucleus. ', '(Note that we previously used masking for this step but the MeasureObjectNeighbors module works improperly when a mask is present. So, instead, we measure intensity and filter instead)']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
    Hidden:1
    Select an image to measure:BlueBackgroundPixels
    Select objects to measure:PotentialNuclei

FilterObjects:[module_num:9|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notes:['Remove potential nuclei that have any amount of blue (because they are background).']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
    Select the objects to filter:PotentialNuclei
    Name the output objects:BlueBackgroundRemovedNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_IntegratedIntensity_BlueBackgroundPixels
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.5

MeasureObjectSizeShape:[module_num:10|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notes:['Measure the size of each remaining potential nucleus; we will throw out any that are extremely large and thus obviously background. This is because annotators sometimes forget to mark a single pixel in the background of the image.']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
    Select objects to measure:BlueBackgroundRemovedNuclei
    Calculate the Zernike features?:No

MeasureObjectNeighbors:[module_num:11|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notes:['Measure the neighbors of any remaining red-outlined objects. We will use this for filtering in the FilterObjects module - you will see why there.']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
    Select objects to measure:BlueBackgroundRemovedNuclei
    Select neighboring objects to measure:BlueBackgroundRemovedNuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:12|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notes:['Here we identify (and remove) red-outlined objects that have <70% touching their neighbors, leaving just those that have lots of border pixels touching other objects. This produces SurroundedObjects, which we will next filter for size - you will see why we are doing this shortly. ']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
    Select the objects to filter:BlueBackgroundRemovedNuclei
    Name the output objects:SurroundedObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Neighbors_PercentTouching_2
    Filter using a minimum measurement value?:Yes
    Minimum value:30
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:13|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notes:['Measure the size of the SurroundedObjects. We will use this for filtering in the FilterObjects module.']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
    Select objects to measure:SurroundedObjects
    Calculate the Zernike features?:No

FilterObjects:[module_num:14|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notes:['Here we finally identify (and remove) SurroundedObjects that are greater than one pixel in size, leaving just TinySurroundedObjects. These are objects we want to ignore because they are tiny pixels of background in-between real nuclei (whereas 1 pixel objects without close neighbors are real, small DNA blobs/micronuclei). The TinySurroundedObjects identified by this module will be used to Mask in the next step. We will also save TinySurroundedObjects to an image for later examination.']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
    Select the objects to filter:SurroundedObjects
    Name the output objects:TinySurroundedObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.5

MaskObjects:[module_num:15|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notes:['Here the TinySurroundedObjects are in essence deleted from the BackgroundRemovedNuclei, producing “GoodNuclearCores” which are outlined in green in the resulting display image for the module.']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
    Select objects to be masked:BlueBackgroundRemovedNuclei
    Name the masked objects:GoodNuclearCores
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:TinySurroundedObjects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ExpandOrShrinkObjects:[module_num:16|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notes:['We expand each nucleus by one pixel. This is because the nucleus objects identified thus far are just the *interior* of each red-outlined region. That is, the objects thus far improperly exclude the edge pixels. We cannot jump straight to IdentifySecondaryObjects to do this because we need to create a little overlap between the nucleus objects and the image in which the secondary outlines will be made. It’s a little complicated but don’t worry about it.']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
    Select the input objects:GoodNuclearCores
    Name the output objects:ExpandedNuclearCores
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
IdentifySecondaryObjects:[module_num:17|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notes:['Because sometimes the red-outlined regions were annotated with borders more than a single pixel thick, here we expand outwards from each nucleus region until reaching the edge of the red outlines, rather than just a single pixel in (as would be the case if we left ExpandOrShrink to do the job). These are the final nuclei! The outline view gives a nice depiction of what is happening here: The magenta pixels are the outermost pixels of each nucleus. The green and white pixels are pixels that were originally thick parts of each annotation (that is, regions where the border was more than one pixel thick). ']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
    Select the input objects:ExpandedNuclearCores
    Name the objects to be identified:FinalNuclei
    Select the method to identify the secondary objects:Distance - B
    Select the input image:OriginalNucleusBoundaries
    Number of pixels by which to expand the primary objects:20
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.5
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
ConvertObjectsToImage:[module_num:18|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notes:['For visualization purposes we turn the final nuclei into an image, which we will then save to the hard drive for later examination.']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
    Select the input objects:FinalNuclei
    Name the output image:NucleusImage
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:19|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notes:['Saving the final nuclei to an image, for examination if desired.']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
    Select the type of image to save:Image
    Select the image to save:NucleusImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Annotation
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_finalnuclei
    Saved file format:png
    Output file location:Default Output Folder sub-folder|labels\\final_objects\\\g<folder_name>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveCroppedObjects:[module_num:20|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
    Objects:FinalNuclei
    Directory:Default Output Folder sub-folder|crops/\g<folder_name>/\g<BaseName>
    Saved file format:png

ConvertObjectsToImage:[module_num:21|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notes:['For visualization purposes we turn the TinySurroundedObjects into an image, which we will then save to the hard drive for later examination.']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
    Select the input objects:TinySurroundedObjects
    Name the output image:TinySurroundedImage
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:22|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notes:['Saving the discarded single-pixel objects (with >70% of border touching their neighbors) to an image, for examination if desired.']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
    Select the type of image to save:Image
    Select the image to save:TinySurroundedImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Annotation
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_discarded
    Saved file format:png
    Output file location:Default Output Folder sub-folder|labels\\discarded_objects\\\g<folder_name>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:23|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notes:['You might find it helpful to look at the object count for the different steps of analysis to discern if there are any problems.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Masks_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
