CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (extension does isimage) (file does contain ".mat")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain ".mat")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<Plate>[0-9]{5})
    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain ".mat")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_Illum
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain ".mat")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'IllumPh_golgi': u'Plate', u'IllumMito': u'Plate', u'OrigPh_golgi': u'Plate', u'IllumER': u'Plate', u'OrigHoechst': u'Plate', u'OrigER': u'Plate', u'IllumSyto': u'Plate', u'OrigSyto': u'Plate', u'OrigMito': u'Plate', u'IllumHoechst': u'Plate'}, {u'IllumPh_golgi': None, u'IllumMito': None, u'OrigPh_golgi': u'Well', u'IllumER': None, u'OrigHoechst': u'Well', u'OrigER': u'Well', u'IllumSyto': None, u'OrigSyto': u'Well', u'OrigMito': u'Well', u'IllumHoechst': None}, {u'IllumPh_golgi': None, u'IllumMito': None, u'OrigPh_golgi': u'Site', u'IllumER': None, u'OrigHoechst': u'Site',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
    Image set matching method:Metadata
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    Assignments count:10
    Single images count:0
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:OrigHoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:OrigSyto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:OrigPh_golgi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "IllumMito")
    Name to assign these images:IllumMito
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumPh_golgi")
    Name to assign these images:IllumPh_golgi
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumSyto")
    Name to assign these images:IllumSyto
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumER")
    Name to assign these images:IllumER
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumHoechst")
    Name to assign these images:IllumHoechst
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:OrigHoechst
    Name the output image:Hoechst
    Select the illumination function:IllumHoechst
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigPh_golgi
    Name the output image:Ph_golgi
    Select the illumination function:IllumPh_golgi
    Select how the illumination function is applied:Divide
    Select the input image:OrigSyto
    Name the output image:Syto
    Select the illumination function:IllumSyto
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,150
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Ph_golgi
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:No

EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:Syto
    Name the output image:FilteredRNA
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast / hexagonal

MaskImage:[module_num:10|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
    Select the input image:FilteredRNA
    Name the output image:SytoNuclei
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:SytoNuclei
    Name the primary objects to be identified:Nucleoli
    Typical diameter of objects, in pixel units (Min,Max):3,15
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MaskImage:[module_num:12|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
    Select the input image:Mito
    Name the output image:MaskedMito
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:MaskedMito
    Name the primary objects to be identified:Mitochondria
    Typical diameter of objects, in pixel units (Min,Max):2,30
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureCorrelation:[module_num:14|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
    Hidden:5
    Hidden:5
    Select an image to measure:ER
    Select an image to measure:Hoechst
    Select an image to measure:Mito
    Select an image to measure:Syto
    Select an image to measure:Ph_golgi
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Cells
    Select an object to measure:Cytoplasm
    Select an object to measure:Nuclei
    Select an object to measure:Mitochondria
    Select an object to measure:Nucleoli

MeasureObjectIntensity:[module_num:15|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
    Hidden:5
    Select an image to measure:ER
    Select an image to measure:Mito
    Select an image to measure:Hoechst
    Select an image to measure:Ph_golgi
    Select an image to measure:Syto
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei

MeasureObjectIntensityDistribution:[module_num:16|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
    Hidden:5
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:ER
    Select an image to measure:Hoechst
    Select an image to measure:Mito
    Select an image to measure:OrigSyto
    Select an image to measure:Syto
    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:17|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
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Mitochondria
    Select objects to measure:Nuclei
    Select objects to measure:Nucleoli
    Calculate the Zernike features?:Yes

MeasureObjectNeighbors:[module_num:18|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Expand until adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:19|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Expand until adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:20|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
    Select objects to measure:Mitochondria
    Select neighboring objects to measure:Mitochondria
    Method to determine neighbors:Expand until adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
RelateObjects:[module_num:21|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
    Select the input child objects:Nucleoli
    Select the input parent objects:Nuclei
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:22|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
    Select the input child objects:Mitochondria
    Select the input parent objects:Cells
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
ExportToDatabase:[module_num:23|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:BBBC022.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Select the plate type:384
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:BBBC022
    Which objects should be used for locations?:None
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CPA images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:Yes
    Enter the name of the group:PerWell
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Plate, Image_Metadata_Well
    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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