CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:5
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your analysis.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:["The Metadata module (optional) allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be extracted from the image's file name and/or location, or from an external file."]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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (file does contain "w2")
    Name to assign these images:rawDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w1")
    Name to assign these images:rawGFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module (optional) allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, separate time-lapse movies, 3D stacks, etc.']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['IdentifyPrimaryObjects takes an input image and identifies biological objects of interest, for example nuclei from a DNA-stained image, or colonies on an agar plate.']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
    Select the input image:rawDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,60
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Background
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:2
    Lower and upper bounds on threshold:0,1.0
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