CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:420
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    :
    Filter images?:Images only
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\\\\\/]\\\\.")

Metadata:[module_num:2|svn_version:'Unknown'|variable_revision_number:6|show_window:False|notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', 'âx80x94', 'Use regular expressions to match and name metadata in the file and path names. ']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Extract metadata?:Yes
    Metadata data type:Text
    Metadata types:{}
    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Specimen>.*)_(?P<Stain>.*)_(?P<FrameNumber>[0-9]*)
    Regular expression to extract from folder name:(?P<Date>[0-9]{4}_[0-9]{2}_[0-9]{2})$
    Extract metadata from:All images
    Select the filtering criteria:and (file does containregexp "GFPHistone")
    Metadata file location:Elsewhere...|
    Match file and image metadata:[]
    Use case insensitive matching?:No
    Metadata file name:
    Does cached metadata exist?:No
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
    Regular expression to extract from folder name:.*[\\\\/](?P<Run>.*)$
    Extract metadata from:All images
    Select the filtering criteria:and (file does containregexp "GFPHistone")
    Metadata file location:Elsewhere...|
    Match file and image metadata:[]
    Use case insensitive matching?:No
    Metadata file name:
    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|svn_version:'Unknown'|variable_revision_number:8|show_window:False|notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'âx80x94', 'Load the images by matching files in all folders against the text pattern âx80x98GFPHistoneâx80x99.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Assign a name to:Images matching rules
    Select the image type:Grayscale image
    Name to assign these images:DNA
    Match metadata:[{'OrigColor': 'Run', 'Nuclei': 'Run'}, {'OrigColor': 'FrameNumber', 'Nuclei': None}]
    Image set matching method:Metadata
    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
    Maximum intensity:255.0
    Process as 3D?:No
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (file does containregexp "GFPHistone")
    Name to assign these images:OrigColor
    Name to assign these objects:Cell
    Select the image type:Color image
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (file does contain "NucleiMask")
    Name to assign these images:NucleiMask
    Name to assign these objects:Nuclei
    Select the image type:Objects
    Set intensity range from:Image metadata
    Maximum intensity:255.0

Groups:[module_num:4|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', 'âx80x94', 'Group the analysis by the âx80x98Runâx80x99 metadata so that each folder is analyzed separately. ']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Run

ColorToGray:[module_num:5|svn_version:'Unknown'|variable_revision_number:4|show_window:True|notes:['Convert the color image to grayscale.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:OrigColor
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
    Convert hue to gray?:Yes
    Name the output image:OrigHue
    Convert saturation to gray?:Yes
    Name the output image:OrigSaturation
    Convert value to gray?:Yes
    Name the output image:OrigValue
    Channel count:1
    Channel number:1
    Relative weight of the channel:1.0
    Image name:Channel1

ExpandOrShrinkObjects:[module_num:6|svn_version:'Unknown'|variable_revision_number:2|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input objects:Nuclei
    Name the output objects:ExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:30
    Fill holes in objects so that all objects shrink to a single point?:No
