CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Mouse>.*)_slide(?P<Slide>.*)_section(?P<Section>[0-9])_f(?P<field>.*)_(?P<Region>.*).tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:Cell_Marker
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['These first two modules perform illumination correction on the image, removing some of the variation in intensity caused by uneven illumination during images.']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
    Select the input image:Cell_Marker
    Name the output image:Illum
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:Cell_Marker
    Name the output image:CellMarker_BGsubtract
    Select the illumination function:Illum
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RunCellpose:[module_num:7|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
    Select the input image:DNA
    Expected object diameter:11
    Detection mode:nuclei
    Name the output object:Nuclei_pose
    Use GPU:No
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.3
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:10
    Use Omnipose for mask reconstruction:0.0
    Invert images:No

RunCellpose:[module_num:8|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notes:['We run runCellpose twice—once for cells and once for nuclei.']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
    Select the input image:CellMarker_BGsubtract
    Expected object diameter:25
    Detection mode:cyto
    Name the output object:Cells_pose
    Use GPU:No
    Use averaging:Yes
    Supply nuclei image as well?:No
    Select the nuclei image:DNA
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.3
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:10
    Use Omnipose for mask reconstruction:0.0
    Invert images:No

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:Cells_pose, Nuclei_pose
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:10|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
    Select the objects to filter:Cells_pose
    Name the output objects:Cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_BoundingBoxMinimum_X
    Filter using a minimum measurement value?:Yes
    Minimum value:2
    Filter using a maximum measurement value?:Yes
    Maximum value:499
    Select the measurement to filter by:AreaShape_BoundingBoxMinimum_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:2
    Filter using a maximum measurement value?:Yes
    Maximum value:499

RelateObjects:[module_num:11|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
    Parent objects:Cells
    Child objects:Nuclei_pose
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:12|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
    Select the objects to filter:Nuclei_pose
    Name the output objects:Nuclei_in_cell
    Select the filtering mode:Measurements
    Select the filtering method:Minimal per object
    Select the objects that contain the filtered objects:Cells
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Parent with most overlap
    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Distance_Centroid_Cells
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
MaskObjects:[module_num:13|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
    Select objects to be masked:Nuclei_in_cell
    Name the masked objects:Nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.7
    Numbering of resulting objects:Retain
    Invert the mask?:No

RelateObjects:[module_num:14|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
    Parent objects:Cells
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:15|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
    Select the objects to filter:Cells
    Name the output objects:Cells_with_nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Children_Nuclei_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:16|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
    Parent objects:Cells_with_nuclei
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:17|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
    Select images to measure:Cell_Marker, DNA
    Select objects to measure:Cells, Cells_with_nuclei, Nuclei

MeasureObjectSizeShape:[module_num:18|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
    Select object sets to measure:Cells, Cells_with_nuclei, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RescaleIntensity:[module_num:19|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
    Select the input image:CellMarker_BGsubtract
    Name the output image:CellMarker_scaled
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CellMarker_scaled
    Name the output image:_outlines_final
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Cells
    Select outline color:yellow
    Select objects to display:Nuclei
    Select outline color:#21FF06
    Select objects to display:Cells_with_nuclei

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:_outlines_final
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop\\test_7\\FinalCells
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Tph2_
    Overwrite existing files without warning?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells_with_nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
