CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your workspace, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Load the images by matching files in the folder against the unique text pattern for each stain: D.TIF for DAPI, F.TIF for the FITC image, R.TIF for the rhodamine image. The three images together comprise an image set.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "D.TIF")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "F.TIF")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "R.TIF")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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notes:['Crop the DAPI image down to a 200 x 200 rectangle by entering specific coordinates.']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
    Select the input image:OrigBlue
    Name the output image:CropBlue
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:501,700
    Top and bottom rectangle positions:251,450
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:6|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notes:['Use the same cropping from the DAPI image for the FITC image.']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
    Select the input image:OrigGreen
    Name the output image:CropGreen
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:Edges
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    Select the image with a cropping mask:CropBlue
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
Crop:[module_num:7|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notes:['Use the same cropping from the DAPI image for the rhodamine image.']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
    Select the input image:OrigRed
    Name the output image:CropRed
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:Edges
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    Select the image with a cropping mask:CropBlue
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify the nuclei from the DAPI image. Three-class thresholding performs better than the default two-class thresholding in this case.']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
    Select the input image:CropBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RunCellpose:[module_num:9|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
    Select the input image:CropBlue
    Expected object diameter:20
    Detection mode:nuclei
    Name the output object:RunCellpose
    Use GPU:No
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:Yes
    Name the probability image:Probabilities
    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.6
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:5
    Z rescaling factor (anisotropy):0.0
    Use Omnipose for mask reconstruction:No
    Invert images:No

RunStarDist:[module_num:10|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
    Select the input image:CropBlue
    Model:Versatile (fluorescent nuclei)
    Name the output object:RunStarDist
    Tile input image?:No
    Horizontal tiles:1
    Vertical tiles:1
    Save probability image?:Yes
    Name the probability image:Probabilities
    Model folder:Elsewhere...|

IdentifySecondaryObjects:[module_num:11|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notes:['Identify the cells by using the nuclei as a "seed" region, then growing outwards until stopped by the image threshold or by a neighbor. The Propagation method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CropGreen
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:12|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notes:['Identify the cytoplasm by "subtracting" the nuclei objects from the cell objects.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:13|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notes:['Measure morphological features from the cell, nuclei and cytoplasm objects.']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
    Select object sets to measure:Cells, Nuclei, Cytoplasm
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:14|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notes:['Measure intensity features from nuclei and cell objects against the cropped DAPI image.']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
    Select images to measure:CropBlue
    Select objects to measure:Nuclei, Cells, Cytoplasm

MeasureTexture:[module_num:15|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notes:['Measure texture features of the nuclei, cells and cytoplasm from the cropped DAPI image.']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
    Select images to measure:CropBlue
    Select objects to measure:Nuclei, Cytoplasm, Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureObjectNeighbors:[module_num:16|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notes:['Obtain the nuclei neighborhood measures, considering nuclei within 4 pixels in any direction as a neighbor.']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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:4
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureColocalization:[module_num:17|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notes:['Measure the pixel intensity correlation between the pixels in the nuclei objects in the cropped DAPI and FITC images, as well as the entire image.']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
    Select images to measure:CropBlue, CropGreen
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Both
    Select objects to measure:Nuclei
    Run all metrics?:Accurate
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:Yes
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:Yes
    Method for Costes thresholding:Fast

MeasureImageIntensity:[module_num:18|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notes:['Measure the image intensity from the cropped DAPI image.']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
    Select images to measure:CropBlue
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureImageQuality:[module_num:19|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notes:['Obtain some measurements for quality control purposes.']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
    Calculate metrics for which images?:Select...
    Image count:3
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigBlue
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigGreen
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigRed
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
CalculateMath:[module_num:20|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notes:['Compute a ratio of nuclei mean intensity to nuclear area for each nucleus.']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
    Name the output measurement:Ratio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Intensity_MeanIntensity_CropBlue
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ClassifyObjects:[module_num:21|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notes:['Classify the nuclei on the basis of area. Divide the areas into 3 bins and give each bin a name.']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
    Make classification decision based on:Single measurement
    Hidden:1
    Hidden:1
    Select the object to be classified:Nuclei
    Select the measurement to classify by:AreaShape_Area
    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:350
    Use a bin for objects below the threshold?:No
    Upper threshold:700
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:Yes
    Enter the bin names separated by commas:Small,Medium,Large
    Retain an image of the classified objects?:No
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    Name the output objects:ClassifiedObjects
    Select the object name:Nuclei
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    Method to select the cutoff:Mean
    Enter the cutoff value:.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:.5
    Use custom names for the bins?:No
    Enter the low-low bin name:LowLow
    Enter the low-high bin name:HighLow
    Enter the high-low bin name:LowHigh
    Enter the high-high bin name:HighHigh
    Retain an image of the classified objects?:No
    Enter the image name:ClassifiedNuclei
    Save classes as new object sets?:No
    Select the location of the classifier model file:Default Output Folder|None
    Rules or classifier file name:None

GrayToColor:[module_num:22|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notes:['Combine the cropped grayscale channels into a color RGB image.']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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:CropRed
    Select the image to be colored green:CropGreen
    Select the image to be colored blue:CropBlue
    Name the output image:RGBImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
SaveImages:[module_num:23|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notes:['Save the color image as an 8-bit TIF, appending the text RBG to the original filename of the DAPI image.']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
    Select the type of image to save:Image
    Select the image to save:RGBImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:RGB
    Saved file format:tiff
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:24|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv’s.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:Nuclei.csv
    Use the object name for the file name?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:Cells.csv
    Use the object name for the file name?:No
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
    File name:Cytoplasm.csv
    Use the object name for the file name?:No
