CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:cho(?P<chonum>\\\\d+)_Probabilities_(?P<probnum>\\\\d)\\\\.
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:cho(?P<chonum>\\\\d+)\\\\.png$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata doesnot probnum "0") (metadata doesnot probnum "1")
    Name to assign these images:phase
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does probnum "1")
    Name to assign these images:cho
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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notes:['An example for how thresholding a phase-contrast image can be challenging.']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
    Select the input image:phase
    Name the output image:phaseThresh
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0, 1.0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:cho
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):40,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0, 1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:Cells
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:8|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notes:['']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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:phase
    Select objects to measure:Cells
    Texture scale to measure:3
    Measure images or objects?:Both

OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:phase
    Name the output image:ChoOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Cells

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:ChoOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cho_
    Overwrite existing files without warning?:Yes
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