CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Mouse>.*)_slide(?P<Slide>.*)_section(?P<Section>[0-9])_(?P<Region>.*)_C(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "C1.tif")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "C2.tif")
    Name to assign these images:Cell_Marker
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['These first two modules perform illumination correction on the image, removing some of the variation in intensity caused by uneven illumination during images.']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
    Select the input image:Cell_Marker
    Name the output image:Illum
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:100
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:Cell_Marker
    Name the output image:CellMarker_BGsubtract
    Select the illumination function:Illum
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Threshold:[module_num:7|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notes:['This module is used to generate a mask of where we think real signal is for our cellular marker. We can use this later to filter the cells segmented by runCellpose.']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
    Select the input image:CellMarker_BGsubtract
    Name the output image:Neurons
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2.9
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.002,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:500
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    Thresholding method:Otsu

RunCellpose:[module_num:8|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notes:['We run runCellpose twice--once for cells and once for nuclei.']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
    Select the input image:CellMarker_BGsubtract
    Expected object diameter:25
    Detection mode:cyto
    Name the output object:Cells_pose
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
    Select the nuclei image:DNA
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.3
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:10
    Z rescaling factor (anisotropy):0.0
    Use Omnipose for mask reconstruction:No
    Invert images:No

RunCellpose:[module_num:9|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
    Select the input image:DNA
    Expected object diameter:12
    Detection mode:nuclei
    Name the output object:Nuclei_pose
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.3
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:15
    Z rescaling factor (anisotropy):0.0
    Use Omnipose for mask reconstruction:No
    Invert images:No

MaskObjects:[module_num:10|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notes:['Using the nuclei to mask the cells, we can generate an image of cytoplasms. This will be useful in our case because the cellular marker is in cytoplasm. We can measure (next module) overlap of the cytoplasm with our mask of the cellular marker generated by Threshold and then filter our segmented cells based on this measurement.']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
    Select objects to be masked:Cells_pose
    Name the masked objects:Unfiltered_cytoplasms
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei_pose
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:Neurons
    Select objects to measure:Unfiltered_cytoplasms

FilterObjects:[module_num:12|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
    Select the objects to filter:Unfiltered_cytoplasms
    Name the output objects:Cytoplasms
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:1
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Neurons
    Filter using a minimum measurement value?:Yes
    Minimum value:.6
    Filter using a maximum measurement value?:No
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    Select additional object to relabel:Cells_pose
    Name the relabeled objects:FilteredTph2Cells_CP1

IdentifyPrimaryObjects:[module_num:13|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notes:["For comparison, here is what an optimized IdentifyPrimaryObjects module might look like. The module does a good job at identifying cells, but you'll notice that it sometimes excludes the center where the nucleus is because this region has low intensity in the cellular marker. "]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
    Select the input image:CellMarker_BGsubtract
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):15,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2
    Threshold correction factor:1.9
    Lower and upper bounds on threshold:0.00,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectIntensity:[module_num:14|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
    Select images to measure:Neurons
    Select objects to measure:Cells_pose

MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:Cells_pose
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:16|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
    Select the objects to filter:Cells_pose
    Name the output objects:Cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:Yes
    Maximum value:4000
    Select the measurement to filter by:AreaShape_MeanRadius
    Filter using a minimum measurement value?:Yes
    Minimum value:2.5
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Neurons
    Filter using a minimum measurement value?:Yes
    Minimum value:0.6
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:17|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
    Parent objects:Cells
    Child objects:Nuclei_pose
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:18|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
    Select the objects to filter:Cells
    Name the output objects:Cells_with_nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Children_Nuclei_pose_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:19|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
    Select the objects to filter:Nuclei_pose
    Name the output objects:Nuclei_in_cell
    Select the filtering mode:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:Cells
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Parent with most overlap
    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Parent_Cells
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
MaskObjects:[module_num:20|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
    Select objects to be masked:Nuclei_pose
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

RelateObjects:[module_num:21|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
    Parent objects:Cells_with_nuclei
    Child objects:MaskedNuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelatedNuclei
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
FilterObjects:[module_num:22|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
    Select the objects to filter:MaskedNuclei
    Name the output objects:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:Cells_with_nuclei
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Parent with most overlap
    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Parent_Cells_with_nuclei
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
MeasureObjectIntensity:[module_num:23|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
    Select images to measure:Cell_Marker, DNA
    Select objects to measure:Cells, Cells_with_nuclei, Nuclei

MeasureObjectSizeShape:[module_num:24|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
    Select object sets to measure:Cells, Cells_with_nuclei, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:25|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
    Parent objects:Cells_with_nuclei
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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    Parent name:None

RescaleIntensity:[module_num:26|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
    Select the input image:CellMarker_BGsubtract
    Name the output image:CellMarker_scaled
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CellMarker_scaled
    Name the output image:_outlines_final
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Cells
    Select outline color:yellow
    Select objects to display:Nuclei

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:_outlines_final
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_7\\FinalCells
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:29|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Tph2_
    Overwrite existing files without warning?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells_with_nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
