CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Plate>[0-9]{5})
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'OrigER': u'Plate', u'OrigSyto': u'Plate', u'OrigPh_golgi': u'Plate', u'OrigMito': u'Plate', u'OrigHoechst': u'Plate'}, {u'OrigER': u'Well', u'OrigPh_golgi': u'Well', u'OrigSyto': u'Well', u'OrigHoechst': u'Well', u'OrigMito': u'Well'}, {u'OrigER': u'Site', u'OrigPh_golgi': u'Site', u'OrigSyto': u'Site', u'OrigHoechst': u'Site', u'OrigMito': u'Site'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_w2")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_w1")
    Name to assign these images:OrigHoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_w5")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_w4")
    Name to assign these images:OrigPh_golgi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_w3")
    Name to assign these images:OrigSyto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:2
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:6|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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigHoechst
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigPh_golgi
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

ExportToDatabase:[module_num:7|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:BBBC022QC_
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    Output file location:Default Output Folder|Desktop
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:BBBC022QC.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:384
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:No
    Properties image group count:5
    Properties group field count:1
    Properties filter field count:0
    Workspace measurement count:12
    Experiment name:BBBC022QC
    Which objects should be used for locations?:None
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:QCClassification
    Export object relationships?:No
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Image
    Select an image to include:OrigER
    Use the image name for the display?:Yes
    Image name:Channel1
    Channel color:green
    Select an image to include:OrigHoechst
    Use the image name for the display?:Yes
    Image name:Channel2
    Channel color:blue
    Select an image to include:OrigMito
    Use the image name for the display?:Yes
    Image name:Channel3
    Channel color:red
    Select an image to include:OrigPh_golgi
    Use the image name for the display?:Yes
    Image name:Channel4
    Channel color:yellow
    Select an image to include:OrigSyto
    Use the image name for the display?:Yes
    Image name:Channel5
    Channel color:magenta
    Do you want to add group fields?:Yes
    Enter the name of the group:PerWell
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Plate, Image_Metadata_Well
    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:Yes
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis measurement:Frame_[None]
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_OrigER
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis measurement:Metadata_ImageNumber
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_OrigHoechst
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis measurement:Metadata_ImageNumber
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_OrigMito
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis measurement:Metadata_ImageNumber
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_OrigPh_golgi
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis measurement:Metadata_ImageNumber
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_OrigSyto
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_StdIntensity_OrigSyto
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_OrigSyto
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_StdIntensity_OrigPh_golgi
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_OrigPh_golgi
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_StdIntensity_OrigMito
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_OrigMito
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_StdIntensity_OrigHoechst
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_OrigHoechst
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_StdIntensity_OrigER
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_OrigER
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:Histogram
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_ThresholdOtsu_OrigHoechst_2W
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis index:ImageNumber
    Select the measurement display tool:Histogram
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_ThresholdOtsu_OrigPh_golgi_3FW
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis index:ImageNumber
