CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<imset>\\\\d+)-
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'pH3': u'imset', u'actin': u'imset', u'DNA': u'imset'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DNA")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "actin")
    Name to assign these images:actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "pH3")
    Name to assign these images:pH3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:imset

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
Smooth:[module_num:6|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
    Select the input image:actin
    Name the output image:FilteredImage
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:FilteredImage
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.95
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:8|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notes:["The actin channel isn't consistent between image sets. When cells are flat and spead out, then Otsu three classes is optimal. However, when cells are rounded up and small, then Otsu two classes is optimal. Therefore, both methods are included and the best metric can be sorted out in post-analysis."]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
    Select the input objects:Nuclei
    Name the objects to be identified:CellsOstu2
    Select the method to identify the secondary objects:Propagation
    Select the input image:FilteredImage
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.95
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MeasureObjectIntensity:[module_num:9|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
    Hidden:3
    Select an image to measure:pH3
    Select an image to measure:DNA
    Select an image to measure:actin
    Select objects to measure:Cells
    Select objects to measure:CellsOstu2
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:CellsOstu2
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:bbbc018_
    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:12|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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