CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160302210837
GitHash:1b13225
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:cho(?P<chonum>\\\\d+)_Probabilities_(?P<probnum>\\\\d)\\\\.tif$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:ccho(?P<chonum>\\\\d+)\\\\.png$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (metadata doesnot probnum "0") (metadata doesnot probnum "1")
    Name to assign these images:phase
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does probnum "0")
    Name to assign these images:cho
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ApplyThreshold:[module_num:5|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notes:['An example for how thresholding a phase-contrast image can be challenging.']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enabled:False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
    Select the input image:phase
    Name the output image:phaseThresh
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:2
    Threshold strategy:Automatic
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
SaveImages:[module_num:6|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:phaseThresh
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    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:cho
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):40,80
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Automatic
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
MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:Cells
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:9|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notes:['']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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:phase
    Select objects to measure:Cells
    Texture scale to measure:3
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cho_
    Overwrite existing files without warning?:Yes
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